PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = prof_rating
  keyboardBackend = ioHub
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Routines
  Routine WelcomeScreen
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Test!

        Please press the spacebar to continue
    KeyboardComponent keySpacebar
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ThankYouScreen
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    TextComponent textThankYouMessage
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thank you for your time!
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  Routine Prof1
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    TextComponent HaveYouTakenThisProf
      letterHeight = 0.05
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Have you taken a class with this Professor?
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    ImageComponent imageProf1
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/image1.png
      pos = (0, 0.15)
      size = (0.5, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent imageYesButton
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/yes_button.png
      pos = (-0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent imageNoButton
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/no_button.png
      pos = (0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    MouseComponent mouse
      clickable = 'imageYesButton', 'imageNoButton'
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine Prof2
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    TextComponent HaveYouTakenThisProf_2
      letterHeight = 0.05
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Have you taken a class with this Professor?
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    ImageComponent imageProf2
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/image2.png
      pos = (0, 0.15)
      size = (0.5, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent imageYesButton_2
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/yes_button.png
      pos = (-0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent imageNoButton_2
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/no_button.png
      pos = (0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    MouseComponent mouse_2
      clickable = 'imageYesButton', 'imageNoButton'
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine Prof3
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    TextComponent HaveYouTakenThisProf_3
      letterHeight = 0.05
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Have you taken a class with this Professor?
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    ImageComponent imageProf3
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/image3.png
      pos = (0, 0.15)
      size = (0.5, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent imageYesButton_3
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/yes_button.png
      pos = (-0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent imageNoButton_3
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/no_button.png
      pos = (0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    MouseComponent mouse_3
      clickable = 'imageYesButton', 'imageNoButton'
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine Prof4
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    TextComponent HaveYouTakenThisProf_4
      letterHeight = 0.05
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Have you taken a class with this Professor?
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    ImageComponent imageProf4
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/image4.png
      pos = (0, 0.15)
      size = (0.5, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent imageYesButton_4
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/yes_button.png
      pos = (-0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent imageNoButton_4
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/no_button.png
      pos = (0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    MouseComponent mouse_4
      clickable = 'imageYesButton', 'imageNoButton'
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine Prof5
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  Routine Prof6
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  Routine Prof7
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  Routine Prof8
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  Routine Prof9
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  Routine Prof10
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  Routine Prof11
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  Routine Prof12
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  Routine Prof13
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  Routine Prof14
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  Routine Prof15
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  Routine Prof16
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  Routine Prof17
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Flow
  Routine WelcomeScreen
  Routine Prof1
  Routine Prof2
  Routine Prof3
  Routine Prof4
  Routine Prof5
  Routine Prof6
  Routine Prof7
  Routine Prof8
  Routine Prof9
  Routine Prof10
  Routine Prof11
  Routine Prof12
  Routine Prof13
  Routine Prof14
  Routine Prof15
  Routine Prof16
  Routine Prof17
  Routine ThankYouScreen
